PsychoPy2experiment version="3.1.2"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = ax-cpt
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Routines
  Routine TCI
    TextComponent text
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $PreCueTime
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      text:
        +
  Routine CUE
    TextComponent CueStimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
      text [set every repeat] = $Cue
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    KeyboardComponent CueResponse
      allowedKeys = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
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    TextComponent PreTargetFixation
      color = black
      letterHeight = 0.1
      startVal [time (s)] = .5
      stopVal [duration (s)] = $ISI
      text = + + +
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    KeyboardComponent CueMindWanderingResponse
      allowedKeys = 'x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $ISI + 0.5
      store = first key
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    CodeComponent CueTrigger
      Code Type = Py
      Begin Routine:
        outlet.push_sample(x=[cueMarker])
    CodeComponent CueMonitorMindWandering
      Code Type = Py
      Begin Routine:
        if mindWandering:
            continueRoutine = False
      Each Frame:
        if CueMindWanderingResponse.keys == 'x':
            mindWandering = True
            continueRoutine = False
  Routine CTI
  Routine TARGET
    TextComponent ProbetStimulus
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      text [set every repeat] = $Probe
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    KeyboardComponent ProbeMindWanderingResponse
      allowedKeys = 'x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
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    KeyboardComponent ProbeResponse
      allowedKeys = '1','2'
      correctAns = $CorrRespTarget
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
      store = first key
      storeCorrect = True
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    CodeComponent ForceLoopEnds
      Code Type = Py
      End Routine:
        ## force dummy loops to end
        subTrial.finished = True
        timingLoop.finished = True

        ## force dummy loops to save out the condition codes
        subTrial.addData('ISI', ISI)
        subTrial.addData('PreCueTime', PreCueTime)
        subTrial.addData('Probe', Probe)
        subTrial.addData('Cue', Cue)

        ## Control Practice block
        if practice:
            practiceTrialCount += 1
            if practiceTrialCount == practiceTrialThreshold:
                trialLoop.finished = True
                practice = 0

        ## i'm using this to control number of trials for development
        devTrialCount += 1
        if devTrialCount == trialThreshold and cutTrialLoopShort:
            trialLoop.finished = True
    CodeComponent TargetTrigger
      Code Type = Py
      Begin Routine:
        outlet.push_sample(x=[targetMarker])
    CodeComponent ProbeMonitorMindWandering
      Code Type = Py
      Begin Routine:
        if mindWandering:
            continueRoutine = False
      Each Frame:
        if ProbeMindWanderingResponse.keys == 'x':
            mindWandering = True
            continueRoutine = False
    CodeComponent PairEndTrigger
      Code Type = Py
      End Routine:
        outlet.push_sample(x=[endMarker])
  Routine start2
    TextComponent basicOverview1
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        On each trial, you will:

        - See a first letter presented in the center of the screen
        - Wait during a long pause
        - See a second letter presented in three positions across the middle of the display

        You should respond to each letter.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine start6
    CodeComponent code_2
      Code Type = Py
      Begin Experiment:
        blockStart = 0
    TextComponent examples
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Here are a few examples to help you understand the task.

        First trial: You see an A, there is a long delay, you see an X.
        You should press button 1 when the A appears,
        and button 2 when the X appears.

        Second trial: You see a B, there is a long delay, you see an X.
        You should press button 1 when the B appears,
        and button 1 when the X appears.

        Third trial: You see an A, there is a long delay, you see a 6.
        You should press button 1 when the A appears, and not respond at all when you see the 6.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine ITI
  Routine PreCue
    TextComponent PreCueFixation
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $PreCueTime
      text = +
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    KeyboardComponent MindWanderingResponse
      allowedKeys = 'x'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $PreCueTime
      store = first key
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    CodeComponent monitorMindWandering
      Code Type = Py
      Begin Routine:
        # Set the mind wandering catch to false to start the trial
        mindWandering = False
      Each Frame:
        if MindWanderingResponse.keys == 'x':
            mindWandering = True
            continueRoutine = False
  Routine allDone
    TextComponent itsAllOver
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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      text:
        This concludes the experiment.

        Thanks for participating!
  Routine InstrTrialOverview
    TextComponent InstrTrialOverviewText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In this task, you will be responding to pairs of letters.

        On each trial, you will:

        - Wait during a pause while you see a single + sign in the center of the screen
        - See a first letter presented in the center of the screen
        - Wait during a long pause while you see three + signs in the center of the screen
        - See a second letter presented in the center of the screen

        You should respond to these letters as quickly and accurately as possible.
    KeyboardComponent InstrTrialOverviewResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine InstrResponses
    TextComponent InstrResponsesText
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Your main objective is to detect the letter pair "A-X" presented in sequence.

        For the first letter that appears

        - Always press button 1


        For the second letter that appears:

        - Press button 1 if the second letter you see does not complete the A-X pair

        - Press button 2 if the second letter you see does complete the A-X pair


        In some instances, the second letter will not be a letter at all, but a number.

        In these cases, do not press either button 1 or 2. Simply wait for the number to disappear.
    KeyboardComponent InstrResponsesResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine InstrTrialExamples
    TextComponent InstrTrialExamplesText
      color = black
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Here are a few examples to help you understand the task.

        First trial: You see an A, there is a long delay, you see an X.
        You should press button 1 when the A appears,
        and button 2 when the X appears.

        Second trial: You see a B, there is a long delay, you see an X.
        You should press button 1 when the B appears,
        and button 1 when the X appears.

        Third trial: You see an A, there is a long delay, you see a 6.
        You should press button 1 when the A appears, and not respond at all when you see the 6.
    KeyboardComponent InstrTrialExamplesResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine InstrFinalPoints
    TextComponent InstrFinalPointsText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You only have 1 second to respond to each letter, so you should respond as quickly and accurately as possible.

        You may still make a response even if the letter disappears off the screen.
    KeyboardComponent InstrFinalPointsResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine MindWanderingCatch
    CodeComponent toggleDisplay
      Code Type = Py
      Begin Routine:
        if mindWandering == False:
            subTrial.addData("MindWandering", 0)
            continueRoutine = False

        else:
            subTrial.addData("MindWandering", 1)
            outlet.push_sample(x=[wanderingMarker])
    TextComponent mindWanderingTextDisplay
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
      text = Mind wandering text
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  Routine Welcome
    TextComponent WelcomeText
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the experiment!

        Try to relax and find a comfortable, neutral position before we begin.

        Press the space bar to continue.
    KeyboardComponent WelcomeResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent lsl_connection
      Code Type = Py
      Begin Experiment:
        # Ally added the below code for triggers
        from pylsl import StreamInfo, StreamOutlet # import required classes
        info = StreamInfo(name='Trigger', type='Markers', channel_count=1,
        channel_format='int32', source_id='Example') # sets variables for object info
        outlet = StreamOutlet(info) # initialize stream.
    CodeComponent GlobalVariables
      Code Type = Py
      Begin Experiment:
        # How many trials should there be for the practice block
        practiceTrialThreshold = 10

        # Do you want to cut the trial loop short (usually for development purposes)?
        # If yes, set `cutTrialLoopShort` to True and set the trialThreshold
        cutTrialLoopShort = False
        trialThreshold = 5
        # A counter for cutting the trial loop short
        devTrialCount = 0

        # Dave added the below code for procedure flow
        # For Development, to control how many trials before the experiment ends

        # Controls block instructions and practice
        practice = 1
        firstBlock = 1
  Routine BlockStart
    CodeComponent ControlBlockInstructions
      Code Type = Py
      Begin Routine:
        if practice:
            blockInstructionText = "Practice instructions"
            practiceTrialCount = 1


        elif firstBlock:
            blockInstructionText = "In this section of the experiment, you will be asked to perform five task blocks.\n\nBetween blocks you will have the opportunity to take a short break."
            firstBlock = 0

        else:
            blockInstructionText = "You may now take a short rest break.\n\nPress Space Bar to continue."
    TextComponent blockStartInstructions
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every frame] = $blockInstructionText
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    KeyboardComponent BlockStartResponse
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Welcome
  Routine InstrTrialOverview
  Routine InstrResponses
  Routine InstrTrialExamples
  Routine InstrFinalPoints
  LoopInitiator blockLoop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 5
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    Routine BlockStart
    LoopInitiator trialLoop loopType="TrialHandler"
      conditionsFile = conditions/GlobalConditions.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AXList.xlsx'), ('TrialType', 'AX'), ('CorrRespTarget', 2.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AYListBas1Pro2Rea1.xlsx'), ('TrialType', 'AY'), ('CorrRespTarget', 1.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AYListBas1Pro2Rea1.xlsx'), ('TrialType', 'AY'), ('CorrRespTarget', 1.0), ('CorRespCue', 1)]),
        OrderedDict([('ConditionFile', 'conditions/AYListBas1Pro2Rea1.xlsx'), ('TrialType', 'BX'), ('CorrRespTarget', 1.0), ('CorRespCue', 1)])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
      LoopInitiator timingLoop loopType="TrialHandler"
        conditionsFile = conditions\trialTiming.xlsx
        isTrials = False
        loopType = fullRandom
        nReps = 1
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        conditions:
          [OrderedDict([('PreCueTime', 1.0), ('ISI', 2)]),
          OrderedDict([('PreCueTime', 1.0), ('ISI', 6)]),
          OrderedDict([('PreCueTime', 0.5), ('ISI', 2)]),
          OrderedDict([('PreCueTime', 0.5), ('ISI', 6)])]
        Routine PreCue
        LoopInitiator subTrial loopType="TrialHandler"
          conditionsFile = $ConditionFile
          isTrials = False
          loopType = fullRandom
          nReps = 1
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          Routine CUE
          Routine TARGET
        LoopTerminator subTrial
      LoopTerminator timingLoop
      Routine MindWanderingCatch
    LoopTerminator trialLoop
  LoopTerminator blockLoop
  Routine allDone
